OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  LEFT
Comment
  RIGHT
Comment
  CHEW
Comment
  LABEL7 = LEFT BLINK
  LABEL8 = RIGHT BLINK
  LABEL1 = CHEW

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1;2;4;6:14" => #1
  Channel List = 1;2;4;6:14
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Time based epoching
  Epoch 1 duration (in sec) = 14.5
  Epoch 1 intervals (in sec) = 1
-> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 25
  Band Pass Ripple (dB) = 2.500000
-> Simple DSP
  Equation = pow(x,2)
-> Signal average => #6
#4 -> Spectral Analysis => #7
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#7.Amplitude -> Spectrum Average => #8
  Considers zeros = false
Input stream 1=#6, Input stream 2=#8 -> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifier6.xml
Input stream=#0.Signal stream, Stimulations stream=#10.Labels -> 0x341d3912 CSV File Writer
  Filename = ${Player_ScenarioDirectory}/results.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stimulations=#10.Labels -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Generic stream reader => #13
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[2022.07.24-15.09.36].ov
#13.Output stream 3 -> Identity => #14
-> Stimulation Filter => #15
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Up
  Stimulation range end = OVTK_GDF_Up
#14 -> Stimulation Filter => #16
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Right
Input stimulations 1=#15, Input stimulations 2=#16 -> Stimulation multiplexer => #17
Targets=#17, Classifier 1=#10.Labels -> Classifier Accuracy Measure
#14 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
