OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  LEFT
Comment
  RIGHT
Comment
  CHEW
Comment
  LABEL7 = LEFT BLINK
  LABEL8 = RIGHT BLINK
  LABEL1 = CHEW

Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[2022.07.24-15.09.36].ov
Input stream=#1.Output stream 2, Stimulations stream=#1.Output stream 3 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/motor_img.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#1.Output stream 3 -> Identity => #3
#1.Output stream 2 -> Channel Selector "1;2;4;6:14" => #4
  Channel List = 1;2;4;6:14
  Action = Select
  Channel Matching Method = Smart
Data=#4 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#4, Input stimulations=#3 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Low Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 25
  Band Pass Ripple (dB) = 2.500000
-> Spectral Analysis => #8
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#8.Amplitude -> Spectrum Average
  Considers zeros = false
-> Simple DSP
  Equation = log(abs(x)+1)
-> Feature aggregator => #11
#6 -> 0x341d3912 Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> 0x341d3912 Simple DSP
  Equation = pow(x,2)
-> 0x341d3912 Signal average
-> 0x341d3912 Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
Input signal=#4, Input stimulations=#3 -> Stimulation based epoching => #16
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> 0x341d3912 Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> 0x341d3912 Univariate Statistics => #18
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#18.Range -> 0x341d3912 Signal average
-> 0x341d3912 Epoch average
  Averaging type = Moving epoch average
  Epoch count = 1
#16 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Low Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 25
  Band Pass Ripple (dB) = 2.500000
-> Spectral Analysis => #22
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#22.Amplitude -> Spectrum Average
  Considers zeros = false
-> Simple DSP
  Equation = log(abs(x)+1)
-> Feature aggregator => #25
Input signal=#4, Input stimulations=#3 -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Low Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 25
  Band Pass Ripple (dB) = 2.500000
-> Spectral Analysis => #28
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#28.Amplitude -> Spectrum Average
  Considers zeros = false
-> Simple DSP
  Equation = log(abs(x)+1)
-> Feature aggregator => #31
Stimulations=#3, Features for class 1=#11, Features for class 2=#25, Features for class 3=#31 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifier6.xml
  Multiclass strategy to apply = OneVsAll
  Class 1 label = OVTK_GDF_Right
  Class 2 label = OVTK_GDF_Left
  Class 3 label = OVTK_GDF_Up
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
