OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  LABEL7 = LEFT BLINK
  LABEL8 = RIGHT BLINK
  LABEL1 = CHEW
  LABEL2 = RIGHT EOG
Comment
  LEFT
Comment
  RIGHT
Comment
  CHEW

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "1:2;4"
  Channel List = 1:2;4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "8;10;13"
  Channel List = 8;10;13
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #16
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "6:12"
  Channel List = 6:12
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #24
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "2;4;13:14"
  Channel List = 2;4;13:14
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 64
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #32
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream 1=#8, Input stream 2=#16, Input stream 3=#24, Input stream 4=#32 -> Feature aggregator => #34
Features=#34 -> Classifier processor => #35
  Filename to load configuration from = ${Player_ScenarioDirectory}/4classes-classifier.xml
Stimulations=#35.Labels -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#35.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

0x341d3912 Generic stream reader => #38
  Filename = C:/Users/jcel1/Desktop/TUM/4th Semester/BSPM/OpenVibeCode/p300-speller/signals/p300-train-[2022.07.14-16.47.21].ov
Input stream 1=#38.Output stream 2, Input stream 2=#38.Output stream 3 -> Identity => #39
#39.Output stream 1 -> Channel Selector "1:2;4"
  Channel List = 1:2;4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #42
  Decimation factor = 2
Input signal=#42, Input stimulations=#39.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_07
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #46
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#46 -> 0x341d3912 Feature aggregator
#39.Output stream 1 -> Channel Selector "8;10;13"
  Channel List = 8;10;13
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #51
  Decimation factor = 2
Input signal=#51, Input stimulations=#39.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_08
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #55
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#55 -> 0x341d3912 Feature aggregator
#39.Output stream 1 -> Channel Selector "6:12"
  Channel List = 6:12
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #60
  Decimation factor = 2
Input signal=#60, Input stimulations=#39.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #64
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#64 -> 0x341d3912 Feature aggregator
#39.Output stream 1 -> Channel Selector "2;4;13:14"
  Channel List = 2;4;13:14
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 64
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #69
  Decimation factor = 2
Input signal=#69, Input stimulations=#39.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_02
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #73
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#73 -> 0x341d3912 Feature aggregator
Input stream 1=#46, Input stream 2=#55, Input stream 3=#64, Input stream 4=#73 -> Feature aggregator => #76
Features=#76 -> Classifier processor => #77
  Filename to load configuration from = ${Player_ScenarioDirectory}/4classes-classifier.xml
#77.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
