OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Downsampling => #1
  New sampling rate (Hz) = 64
  Frequency cutoff ratio = 1/2
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.5
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Channel Selector "1:2;4"
  Channel List = 1:2;4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#8 -> Feature aggregator => #10
#1 -> Channel Selector "10;13:14"
  Channel List = 10;13:14
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #16
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#16 -> Feature aggregator => #18
#1 -> Channel Selector "6:12"
  Channel List = 6:12
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #24
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#24 -> Feature aggregator => #26
Stimulations=#0.Stimulations, Features for class 1=#10, Features for class 2=#18, Features for class 3=#26 -> Classifier trainer => #27
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Class 3 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Commands=#27 -> 0x341d3912 Classifier processor => #28
  Filename to load configuration from =
#28.Hyperplane distance -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Stimulations=#27 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00

Univariate Statistics
  Mean = false
  Variance = false
  Range = true
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
