OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  RIGHT
Comment
  LEFT
Comment
  CHEW
Comment
  LABEL7 = LEFT BLINK
  LABEL8 = RIGHT BLINK
  LABEL1 = CHEW
  LABEL2 = RIGHT EOG

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[2022.07.14-16.47.21].ov
#0.Output stream 3 -> Identity => #1
#0.Output stream 2 -> Channel Selector "1:2;4"
  Channel List = 1:2;4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #4
  Decimation factor = 2
Input signal=#4, Input stimulations=#1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_07
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#8 -> Feature aggregator => #10
#0.Output stream 2 -> Channel Selector "10;13:14"
  Channel List = 10;13:14
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #13
  Decimation factor = 2
Input signal=#13, Input stimulations=#1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_08
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #17
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#17 -> Feature aggregator => #19
#0.Output stream 2 -> Channel Selector "6:12"
  Channel List = 6:12
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #22
  Decimation factor = 2
Input signal=#22, Input stimulations=#1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #26
  Averaging type = Moving epoch average
  Epoch count = 4
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#26 -> Feature aggregator => #28
#0.Output stream 2 -> Channel Selector "2;4;13:14"
  Channel List = 2;4;13:14
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 64
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #31
  Decimation factor = 2
Input signal=#31, Input stimulations=#1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_02
-> Simple DSP
  Equation = pow(x,2)
-> Signal average
-> Epoch average => #35
  Averaging type = Moving epoch average
  Epoch count = 4
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#35 -> Feature aggregator => #37
Stimulations=#1, Features for class 1=#10, Features for class 2=#19, Features for class 3=#28, Features for class 4=#37 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = OneVsOne
  Pairwise Decision Strategy = Voting
  Class 1 label = OVTK_StimulationId_Label_07
  Class 2 label = OVTK_StimulationId_Label_08
  Class 3 label = OVTK_StimulationId_Label_01
  Class 4 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Min/Max detection
  Min/Max = Max
  Time window start = 300
  Time window end = 500

0x341d3912 Simple DSP
  Equation = pow(x,2)-pow(y,2)

0x341d3912 Univariate Statistics
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30

0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = 0.5
  Epoch offset (in sec) = -0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_07
